\Programmer: Ben Libman
\Date: 8.15.17
\Simple Rich to Lean Procedure
\Filename: R2L.mpc
\
\PINS:
\   INPUT PINS:
\       Left lever     = Pin 1
\       Right lever    = Pin 2
\   OUPUT PINS:
\       Left light     = Pin 1
\       Right light    = Pin 2
\       House light    = Pin 7
\       Hopper         = Pin 3
\
\*******************************************************************************************************************************
\*******************************************************************************************************************************

\-------------------------------------------------------------------------------------------------------------------------------
\VARIABLES:
\   INPUTS:
        ^L_Lever    =   1
        ^R_Lever    =   2
\
\   OUTPUTS
        ^H_Light    =   7 
        ^L_Light    =   1
        ^R_Light    =   2 
        ^Hopper     =   3

\   DEFINED VARIABLES
\       A(1)        =   Current ratio counter (flushed after each trial)
\       Rich_FR     =   5
\       Lean_FR     =   50
\       R_Lhold     =   15"                             --Amount of time that rich ratio must be completed before auto blackout
\       L_Lhold     =   300"                            --Amount of time that lean ratio must be completed before auto blackout
\       blackout    =   2                               --Blackout period hold after Sr is deliverd
\       Rich_SD     =   1.5" flashing Light
\       Lean_SD     =   Solid Light
\       Ratio       =   Current ratio in progress
\
\   DATA
\       B(1)        =   Rich_count 
\       B(2)        =   Lean_Count
\       D(1)        =   Total trials
\       A(0)        =   Current ratio
\       N(P)        =   PRP Recorder
\-------------------------------------------------------------------------------------------------------------------------------

\-------------------------------------------------------------------------------------------------------------------------------
\DATA FORMATS
    DISKCOLUMNS =   1
    DISKVARS    =   C, M
\-------------------------------------------------------------------------------------------------------------------------------

\-------------------------------------------------------------------------------------------------------------------------------
\LISTS AND DIMS
    list D = 5, 5, 50, 50, 5, 50

    DIM A = 10
    DIM B = 10
    Dim E = 10
    DIM C = 2000             
    DIM N = 65
\-------------------------------------------------------------------------------------------------------------------------------

S.S.1,\===========================================================================================================\Contingencies
    \---------------------------------------------------------------------------------------------Start commands choose first FR
    S1,
        #K1: list A(0) = D(H); ON ^H_Light;
            if A(0) = 5 [@RICH, @ LEAN]                                                              
                @RICH: ON ^L_Light; Z1 ---> S2                                                    \Z1
                @LEAN: ON ^R_Light; Z2 ---> S3                                                    \Z2
                                                                                                    
    \-------------------------------------------------------------------RICH: A(1) = Current Ratio Count; B(1) = Rich ratio count
    S2,
        #R^L_Lever: ADD A(1), B(1);
            if A(1) = 5 [@True, @False]
                @True: SET A(1) = 0; ON ^Hopper; OFF ^L_Light; OFF ^H_Light; Z3 ---> S4         \Z2, Z3
                @False: ---> SX

        15": SET A(1) = 0; OFF ^L_Light; OFF ^H_Light; Z4 ---> S4                               \Z2, Z4

    \-----------------------------------------------------------------------------------------------LEAN: B(2) = Lean ratio count
    S3,
        #R^R_Lever: ADD A(1), B(2);
            if A(1) = 50 [@True, @False]
                @True: SET A(1) = 0; ON ^Hopper; OFF ^R_Light; OFF ^H_Light; Z3 ---> S4          \Z3
                @False: ---> SX

        30":SET A(2) = 0; OFF ^R_Light; OFF ^H_Light; Z4 ---> S4                                     \Z4

    \-----------------------------------------------------------------------------------------------------------END SESSION LOOP
    S4,
        0.05": OFF ^Hopper; ADD E(1);                                                            \D(1) = trial count
            if E(1) = 11 [@True, @False]
                @True: SET C(i) = -987.987; SET N(P) = -987.987 ---> STOPABORTFLUSH                            \END SESSION CRIT
                @False: ---> S5

    S5,                            
        1.95": list A(0) = D(H); ON ^H_Light; Set K = A(0);         \ <---- Needed to include "Set"                                                               
            if A(0) = 5 [@True, @False]                             
                @True: Z1 ---> S2                                                                \Z1
                @False: Z2 ---> S3                                                               \Z2
                        
S.S.2,\================================================CHECK THIS LOOP!==========================================\Flashing light
    \---------------------------------------------------------------------------------------------------------------------------
    S1,                  
        #Z1: ---> S2                                                                               \Z1
        #Z2: ---> S4

    \---------------------------------------------------------------------------------------------------------------------------
    S2,
        .25": OFF ^L_Light ---> S3       
        #Z3: ON ^R_Light ---> S1                                                                  \Z3
        #Z4: OFF ^H_Light---> S1                                                                   \Z4

    \---------------------------------------------------------------------------------------------------------------------------
    S3,
        .25": ON ^L_Light ---> S2
        #Z3: OFF ^R_Light ---> S1                                                                  \Z3
        #Z4: OFF ^H_Light ---> S1                                                                  \Z4
        
    S4,
        #Z3: ON ^R_Light ---> SX                                                                  \Z3
        #Z4: OFF ^H_Light ---> S1 

S.S.3,\=========================================================================================================\Timer and shows
    \---------------------------------------------------------------------------------------------------------------------------
    S1,
        #K1: ---> S2

    \---------------------------------------------------------------------------------------------------------------------------
    S2,                       
        0.01": ADD t;
            show 1, T(M), t/6000;
            show 2, Ratio, A(0);
            show 3, Trials, E(1);
            show 4, Resp, A(1)---> SX


S.S.4,\====================================================================================================================\PRP
    \---------------------------------------------------------------------------------------------------------------------------
    S1,
        #Z3: ---> S2
        #Z4: ---> S2

    \---------------------------------------------------------------------------------------------------------------------------
    S2,
        #Z1: if K = 5 [@RR, @LR]
            @RR: SET L = 1 ---> S3
            @LR: SET L = 2 ---> S3
                     
        #Z2: if K = 5 [@RL, @LL]
            @RL: SET L = 3 ---> S4
            @LR: SET L = 3 ---> S4

    \---------------------------------------------------------------------------------------------------------------------------
    S3,      
        .01": ADD M;
            if M/100 = 15 [@Done, @Stay]
                @Done: SET N(P) = M + K/10; ADD P; SET M = 0 ---> S2
                @Stay: ---> SX
        #R^L_Lever: SET N(P) = M + K/10; ADD P; SET M = 0 ---> S2
                         
    \---------------------------------------------------------------------------------------------------------------------------
    S4,                    
        .01": ADD M;
            if M/100 = 300 [@Done, @Stay]
                @Done: SET N(P) = M + K/10; ADD P; SET M = 0 ---> S2
                @Stay: ---> SX
        #R^R_Lever: SET N(P) = M + K/10; ADD P; SET M = 0 ---> S2

S.S.5,\==============================================================================\Data ---> SR, Blackout, Start trial, Resps
    \---------------------------------------------------------------------------------------------------------------------------
    S1,              
        #Z1: SET C(i) = t + 0.05; ADD i ---> S2
        #Z2: SET C(i) = t + 0.5; ADD i ---> S2

    \---------------------------------------------------------------------------------------------------------------------------
    S2,
        #R^L_Lever: SET C(i) = t + 0.1; ADD i ---> SX
        #R^R_Lever: SET C(i) = t + 0.1; ADD i ---> SX
        #Z1: SET C(i) = t + 0.05; ADD i ---> SX                 \Ratio type
        #Z2: SET C(i) = t + 0.5; ADD i ---> SX                  \Ratio type
        #Z3: SET C(i) = t + 0.2; ADD i ---> SX
        #Z4: SET C(i) = t + 0.21; ADD i ---> SX      

\Z1 = Start Rich
\Z2 = Start Lean
\Z3 = Deliver Pellet
\Z4 = Blackout



